PsychoPy2experiment version="2026.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = oddball_ch3
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine instruction
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    TextComponent instruction_text_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is the instruction

        Press “space” to continue
    KeyboardComponent instruction_keyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine goodbye
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    TextComponent goodbye_text_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is goodbye

        Press the “space” to leave
    KeyboardComponent goodbye_keyboard_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine KeepInMindSlide
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    ImageComponent KeepInMindSlide_image_1
      image [set every repeat] = $relpicture
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.995
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    TextComponent KeepInMindSlide_text_1
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.995
      text = Remember This face
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  Routine KeepInMindRecog
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    ImageComponent KeepInMindRecog_image_1
      image [set every repeat] = $test_stim[0]
      pos = (-0.4, 0.2)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.995
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    ImageComponent KeepInMindRecog_image_2
      image [set every repeat] = $test_stim[1]
      pos = (0, 0.2)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.995
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    ImageComponent KeepInMindRecog_image_3
      image [set every repeat] = $test_stim[2]
      pos = (0.4, 0.2)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.995
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    ImageComponent KeepInMindRecog_image_4
      image [set every repeat] = $test_stim[3]
      pos = (-0.4, -0.2)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.995
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    ImageComponent KeepInMindRecog_image_5
      image [set every repeat] = $test_stim[4]
      pos = (0, -0.2)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.995
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    ImageComponent KeepInMindRecog_image_6
      image [set every repeat] = $test_stim[5]
      pos = (0.4, -0.2)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.995
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    KeyboardComponent KeepInMindRecog_key_resp_1
      allowedKeys [set every repeat] = '1', '2', '3', '4', '5', '6'
      correctAns = $correction_choice
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        p_port.setData(0)
        port_start = None
        port_sent = False
      Each Frame:
        if KeepInMindRecog_key_resp_1.corr == 1:
            marker = 242
            p_port.setData(marker)
            port_sent = True
            port_start = t
            thisExp.addData('trigger', marker)
        if KeepInMindRecog_key_resp_1.corr == 0:
            marker = 241
            p_port.setData(marker)
            port_sent = True
            port_start = t
            thisExp.addData('trigger', marker)

        if port_sent == True and t > port_start + 0.1 - frameTolerance:
            p_port.setData(0)
  Routine RSVP
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  Routine ISI
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    PolygonComponent ISI_polygon_1
      fillColor = black
      lineColor = black
      lineWidth = 2
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.095
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    ParallelOutComponent p_port_3
      address = 0x0378
      register = EIO
      startData = specific_list[RSVPList.thisN]
      startVal [condition] = ISI_polygon_1 == STARDED
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        p_port.setData(0)
        port_sent = False
        prot_start = None
      Each Frame:
        if port_sent == False and ISI_polygon_1.status == NOT_STARTED:
            port_sent = True
            port_srat = t
            p_port.setData(specific_list[RSVPList.thisN])

        if port_sent == True and t > port_srat + 0.1 - frameTolerance:
            p_port.setData(0)
      End Routine:
        thisExp.addData('trigger', specific_list[RSVPList.thisN])
  Routine RSVP_2
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    ImageComponent RSVP_image_1
      image [set every repeat] = $stimulus_list[RSVPList.thisN]
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.595
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    ParallelOutComponent p_port_2
      address = 0x0378
      register = EIO
      startData = trigger_list[RSVPList.thisN]
      startVal [condition] = RSVP_image_1.status == STARTED
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        p_port.setData(0)
        port_start = None
        port_sent = False
      Each Frame:
        if port_sent == False and RSVP_image_1.status == NOT_STARTED:
            port_sent = True
            p_port.setData(category_list[RSVPList.thisN])
            port_start = t

        if port_sent == True and t > port_start + 0.1 - frameTolerance:
            p_port.setData(0)
      End Routine:
        thisExp.addData('trigger',category_list[RSVPList.thisN])
  Routine fixation
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    PolygonComponent fixation_polygon_1
      fillColor = white
      lineWidth = 2
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.695
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  Routine judge
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    CodeComponent judge_code
      Code Type = Auto->JS
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      Begin Routine:
        if KeepInMindRecog_key_resp_1.corr == 1:      #如果键盘控件key_resp的值被判断（两个连续的等号表示判断）为等于1，被试做对
            feedback = 'congratulation'       #变量feedback呈现‘恭喜’
            font_color = 'green'
        else:                       #如果如果键盘控件key_resp的值被判断为不等于1，即为0，被试做错
            feedback = 'pity'       #变量feedback呈现‘遗憾'
            font_color = 'red'
    TextComponent judge_text_1
      color [set every repeat] = $font_color
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.995
      text [set every repeat] = $feedback
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  Routine Feedback
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  Routine judge_to_rep
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        corr_count = InMind.data['resp.corr']

        acc_rate = sum(corr_count) / len(corr_count)

        if acc_rate > 0.6:
            nrep = true
  Routine pretend_to_redo
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    TextComponent pretend_to_redo_text_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = As if we are redoing the prac
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  Routine redo_or_not
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        acc = InMind.data['KeepInMindRecog_key_resp_1.corr']

        acc_rate = sum(acc) / len(acc)

        if acc_rate < 0.6:
            nrep = 1
        else:
            nrep = 0
  Routine pretend_redo
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    TextComponent pretend_redo_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = as if this is redo
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  Routine shuffle_sti
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    CodeComponent shuffle_code
      Code Type = Auto->JS
  Routine current_stim
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    CodeComponent corrent_code_3
      Code Type = Auto->JS
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      Begin Routine:
        stim_this_trial = stimulus_list[RSVPList.thisN]
  Routine shuffle_stim
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    CodeComponent shuffle_code_3
      Code Type = Auto->JS
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      Begin Routine:
        from random import shuffle

        # 1. 构造列表
        stim = [
            './img/1.jpg', './img/2.jpg', './img/3.jpg',
            './img/4.jpg', './img/5.jpg', './img/6.jpg'
        ] * 10

        # 加入两个 oddball
        stim += ['./img/101.jpg', './img/102.jpg']

        list_ok = False

        while not list_ok:

            # 初始化标志变量
            double_stim = False
            too_close = False

            # 2. 检查相邻重复
            for i in range(len(stim) - 1):
                if stim[i] == stim[i + 1]:
                    double_stim = True
                    break

            # 3. 检查 oddball 距离
            odd_1 = stim.index("./img/102.jpg")
            odd_2 = stim.index("./img/101.jpg")

            if abs(odd_1 - odd_2) < 2:
                too_close = True

            # 4. 如果不满足条件 → 重新 shuffle
            if double_stim or too_close:
                shuffle(stim)
            else:
                list_ok = True

        # 最终列表
        stimulus_list = stim
  Routine test_stimulus
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    CodeComponent test_stimulus_code_3
      Code Type = Auto->JS
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      Begin Routine:
        # 然后测试界面的图片呈现搞一搞随机化，因为这个是等额呈现并选择，所以应该不用很麻烦
        # 首先构造样本空间
        test_stim = [
            './img/1.jpg', './img/2.jpg', './img/3.jpg',
            './img/4.jpg', './img/5.jpg', './img/6.jpg'
        ]

        shuffle(test_stim)
        #因为python从0开始，但是实际按键从1开始所以这里加1
        correction_choice = test_stim.index(relpicture) + 1
  Routine reset_port
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    CodeComponent reset_code_4
      Code Type = Auto->JS
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      Begin Routine:
        t_port = tThisFlipGlobal
      Each Frame:
        # tThisFlipGloba获取实时时间，如果这一个当前时间大于发送脉冲时间0.1秒就清零
        # frameTolerance只是作为时间校正作用
        if tThisFlipGlobal > t_port + 0.1 - frameTolerance:
            port_1.setData(0)
  Routine prepare_marker
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        # 这个是为了脑电marker作准备
        # 首先是类型marker
        category_list = []

        for i in stimulus_list:

            if i == relpicture:
                category_list.append(201)

            elif i in ['./img/101.jpg', './img/102.jpg']:
                category_list.append(203)

            else:
                category_list.append(202)

        # 然后是具体刺marker
        # 比较笨哈我，真不熟悉python
        specific_list = []

        for i in stimulus_list:
            if i == './img/101.jpg':
                specific_list.append(101)
            elif i == './img/102.jpg':
                specific_list.append(102)
            elif i == './img/1.jpg':
                specific_list.append(1)
            elif i == './img/2.jpg':
                specific_list.append(2)
            elif i == './img/3.jpg':
                specific_list.append(3)
            elif i == './img/4.jpg':
                specific_list.append(4)
            elif i == './img/5.jpg':
                specific_list.append(5)
            else:
                specific_list.append(6)
  Routine welcome
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    TextComponent welcome_text_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is welcome

        Press “space” to continue
    KeyboardComponent welcome_keyboard_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ParallelOutComponent wel_port
      address = 0x0378
      disabled = True
      register = EIO
      startData = 1
      startVal [condition] = welcome_text_1.status == STARTED
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = True
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    CodeComponent wel_port_code
      Code Type = Auto->JS
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      Begin Experiment:
        # from psychopy import parallel

        # p_port = parallel.ParallelPort(address = '0x0378')

        # Begin Experiment —— Mac 上专用
        class DummyPort:
            def setData(self, val): pass
            def setPin(self, pin, val): pass
            def getData(self): return 0

        p_port = DummyPort()
        have_port = False
      Begin Routine:
        # begin routine
        pulse_sent = False
        pulse_start = None
        p_port.setData(0)
      Each Frame:
        # for each frame
        if pulse_sent == False and welcome_text_1.status == NOT_STARTED:
            pulse_sent = True
            pulse_start = t
            p_port.setData(1)

        if pulse_sent == True and t > pulse_start + 0.1 - frameTolerance:
            p_port.setData(0)
Flow
  Routine welcome
  Routine instruction
  LoopInitiator InMind loopType="TrialHandler"
    conditionsFile = list/list.xlsx
    loopType = random
    nReps = 8
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    conditions:
      [{'relpicture': './img/1.jpg', 'recog': './img/1.jpg', 'correct': 'y', 'irr_1': './img/2.jpg', 'irr_2': './img/3.jpg', 'irr_3': './img/4.jpg', 'irr_4': './img/5.jpg', 'irr_5': './img/6.jpg'},
      {'relpicture': './img/2.jpg', 'recog': './img/1.jpg', 'correct': 'n', 'irr_1': './img/3.jpg', 'irr_2': './img/4.jpg', 'irr_3': './img/5.jpg', 'irr_4': './img/6.jpg', 'irr_5': './img/1.jpg'},
      {'relpicture': './img/3.jpg', 'recog': './img/3.jpg', 'correct': 'y', 'irr_1': './img/4.jpg', 'irr_2': './img/5.jpg', 'irr_3': './img/6.jpg', 'irr_4': './img/1.jpg', 'irr_5': './img/2.jpg'},
      {'relpicture': './img/4.jpg', 'recog': './img/3.jpg', 'correct': 'n', 'irr_1': './img/5.jpg', 'irr_2': './img/6.jpg', 'irr_3': './img/1.jpg', 'irr_4': './img/2.jpg', 'irr_5': './img/3.jpg'},
      {'relpicture': './img/5.jpg', 'recog': './img/5.jpg', 'correct': 'y', 'irr_1': './img/6.jpg', 'irr_2': './img/1.jpg', 'irr_3': './img/2.jpg', 'irr_4': './img/3.jpg', 'irr_5': './img/4.jpg'},
      {'relpicture': './img/6.jpg', 'recog': './img/5.jpg', 'correct': 'n', 'irr_1': './img/1.jpg', 'irr_2': './img/2.jpg', 'irr_3': './img/3.jpg', 'irr_4': './img/4.jpg', 'irr_5': './img/5.jpg'}]
    Routine shuffle_stim
    Routine prepare_marker
    Routine KeepInMindSlide
    Routine test_stimulus
    Routine fixation
    LoopInitiator RSVPList loopType="TrialHandler"
      loopType = sequential
      nReps = 62
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      conditions:
        [{'stim': './img/1.jpg'},
        {'stim': './img/2.jpg'},
        {'stim': './img/3.jpg'},
        {'stim': './img/4.jpg'},
        {'stim': './img/5.jpg'},
        {'stim': './img/6.jpg'},
        {'stim': './img/1.jpg'},
        {'stim': './img/2.jpg'},
        {'stim': './img/3.jpg'},
        {'stim': './img/4.jpg'},
        {'stim': './img/5.jpg'},
        {'stim': './img/6.jpg'},
        {'stim': './img/1.jpg'},
        {'stim': './img/2.jpg'},
        {'stim': './img/3.jpg'},
        {'stim': './img/4.jpg'},
        {'stim': './img/5.jpg'},
        {'stim': './img/6.jpg'},
        {'stim': './img/1.jpg'},
        {'stim': './img/2.jpg'},
        {'stim': './img/3.jpg'},
        {'stim': './img/4.jpg'},
        {'stim': './img/5.jpg'},
        {'stim': './img/6.jpg'},
        {'stim': './img/1.jpg'},
        {'stim': './img/2.jpg'},
        {'stim': './img/3.jpg'},
        {'stim': './img/4.jpg'},
        {'stim': './img/5.jpg'},
        {'stim': './img/6.jpg'},
        {'stim': './img/1.jpg'},
        {'stim': './img/2.jpg'},
        {'stim': './img/3.jpg'},
        {'stim': './img/4.jpg'},
        {'stim': './img/5.jpg'},
        {'stim': './img/6.jpg'},
        {'stim': './img/1.jpg'},
        {'stim': './img/2.jpg'},
        {'stim': './img/3.jpg'},
        {'stim': './img/4.jpg'},
        {'stim': './img/5.jpg'},
        {'stim': './img/6.jpg'},
        {'stim': './img/1.jpg'},
        {'stim': './img/2.jpg'},
        {'stim': './img/3.jpg'},
        {'stim': './img/4.jpg'},
        {'stim': './img/5.jpg'},
        {'stim': './img/6.jpg'},
        {'stim': './img/1.jpg'},
        {'stim': './img/2.jpg'},
        {'stim': './img/3.jpg'},
        {'stim': './img/4.jpg'},
        {'stim': './img/5.jpg'},
        {'stim': './img/6.jpg'},
        {'stim': './img/1.jpg'},
        {'stim': './img/2.jpg'},
        {'stim': './img/3.jpg'},
        {'stim': './img/4.jpg'},
        {'stim': './img/5.jpg'},
        {'stim': './img/6.jpg'},
        {'stim': './img/101.jpg'},
        {'stim': './img/102.jpg'}]
      Routine ISI
      Routine RSVP_2
    LoopTerminator RSVPList
    Routine KeepInMindRecog
    Routine judge
  LoopTerminator InMind
  Routine redo_or_not
  LoopInitiator redo loopType="TrialHandler"
    loopType = random
    nReps = nrep
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    Routine pretend_redo
  LoopTerminator redo
  Routine goodbye
